Key	Value
CellProfiler_Version	4.2.6
ChannelType_Pre_IBA1	Grayscale
ChannelType_ROI_Mask	Grayscale
Default_InputFolder	C:\Users\thevl
Default_OutputFolder	C:\Users\thevl
ImageSet_Zip_Dictionary	b'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'
Metadata_GroupingTags	"[""Metadata_Pt_type"", ""Metadata_Cortex_region"", ""Metadata_Sample_number"", ""Metadata_Layer""]"
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:-(?P<Pt_type>[A-Z]{1,3})(?P<Sample_number>[0-9]{1,2})(?P<Cortex_region>[A-Z]{1,2})L(?P<Layer>[0-9]).(?P<Iteration>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ""iba1"")
    Name to assign these images:Pre_IBA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""mask"")
    Name to assign these images:ROI_Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:4
    Metadata category:Pt_type
    Metadata category:Cortex_region
    Metadata category:Sample_number
    Metadata category:Layer

MaskImage:[module_num:5|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
    Select the input image:Pre_IBA1
    Name the output image:IBA1
    Use objects or an image as a mask?:Image
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    Select image for mask:ROI_Mask
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:IBA1
    Name the output image:IBA1_Filtered_Soma
    Select the operation:Suppress
    Feature size:8
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:IBA1_Filtered_Soma
    Name the primary objects to be identified:Microglia_soma
    Typical diameter of objects, in pixel units (Min,Max):21,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.7
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:IBA1
    Name the output image:IBA1_Enhanced_Processes
    Select the operation:Enhance
    Feature size:2
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:No

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Microglia_soma
    Name the objects to be identified:Microglia_total
    Select the method to identify the secondary objects:Propagation
    Select the input image:IBA1_Enhanced_Processes
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    Regularization factor:0.00
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Filtered_Microglia_Soma
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.18
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayObjects:[module_num:10|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
    Input:IBA1
    Name the output image:Microglia_Overlay
    Objects:Microglia_total
    Opacity:0.2

MaskObjects:[module_num:11|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
    Select objects to be masked:Microglia_total
    Name the masked objects:Masked_Microglia
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Microglia_total
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Microglia_total
    Name the output image:Microglia_impression
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Microglia_total
    Name the output image:Microglia_impression_for_MoBIE
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Microglia_impression_for_MoBIE
    Select method for constructing file names:From image filename
    Select image name for file prefix:Pre_IBA1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_total_label
    Saved file format:tiff
    Output file location:Same folder as image|D:\\GeoMx Images\\GeoMx DIArun1\\Run - 2 normalized\\MoBIE\\MoBIE masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:15|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
    Do you want to save cropped images or object masks?:Images
    Objects:Microglia_total
    Directory:Elsewhere...|D:\\GeoMx Images\\GeoMx DIArun1\\IBA1 only\\Cropped Objects\\Microglia
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:Pre_IBA1
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:Pre_IBA1

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Filtered_Microglia_Soma, Microglia_total
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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
    Select images to measure:IBA1
    Select objects to measure:Filtered_Microglia_Soma, Microglia_total
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectSkeleton:[module_num:18|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
    Select the seed objects:Filtered_Microglia_Soma
    Select the skeletonized image:Microglia_impression
    Retain the branchpoint image?:No
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    Fill small holes?:No
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Filtered_Microglia_Soma
    Select neighboring objects to measure:Filtered_Microglia_Soma
    Method to determine neighbors:Within a specified distance
    Neighbor distance:150
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ImageMath:[module_num:20|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ROI_MaskForMobie
    Image or measurement?:Image
    Select the first image:ROI_Mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:ROI_MaskForMobie
    Select method for constructing file names:From image filename
    Select image name for file prefix:ROI_Mask
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\GeoMx Images\\GeoMx DIArun1\\IBA1 only\\Original Images\\Normalized Microglia
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma ("","")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\GeoMx Images\\GeoMx DIArun1\\IBA1 only
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\GeoMx Images\\GeoMx DIArun1\\IBA1 only\\MoBIE
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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"
Run_Timestamp	2024-11-06T13:42:11.635743
